PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image
      image = C:/Users/kubar/Desktop/Untitled.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
